# Instrument driver configuration file.

[General settings]
# The name is shown in all the configuration windows
name: heater_thermometrie_2021

# The version string should be updated whenever changes are made to this config file

# Modification of version 1.0 on 24.08.2016 by Marius Palm: Modifying the text displayed for "Reset instrument at startup"
# Version 2.0: Hardware fixes. 2019-04, Peter&Hans Märki
version: 1.9.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: heater_driver

signal_generator: True

interface: Other

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: Hardware
model_str_2: Simulation

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
# TODO(hans): Remove
[Control Mode / Logging]
datatype: COMBO
def_value: WARNING
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING

[Control Heating / Mode]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: manual
combo_def_3: controlled
combo_def_4: defrost

[Control Heating / set power (mode manual)]
datatype: DOUBLE
unit: %
def_value: 0.0
low_lim: 0.0
high_lim: 100.0

[Control Heating / set temperature (mode controlled)]
datatype: DOUBLE
unit: K
def_value: 0.0

[Control Heating / set temperature and settle (mode controlled)]
datatype: DOUBLE
unit: K
def_value: 0.0

[Control Heating / settle time (mode controlled)]
datatype: DOUBLE
unit: s
def_value: 60.0

[Control Heating / temperature tolerance band (plus minus)]
datatype: DOUBLE
unit: K
def_value: 0.5

[Control Heating / timeout time (mode controlled)]
datatype: DOUBLE
unit: s
def_value: 300.0

[Control Thermometrie / Thermometrie ]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: on

[Status Heater / Defrost - Switch on box]
datatype: COMBO
def_value: off
combo_def_1: off
combo_def_2: on
permission: READ

[Status Heater / Defrost - User interaction]
datatype: COMBO
def_value: wait
combo_def_1: wait
combo_def_2: Ready to open
permission: READ

[Status Heater / Error counter]
datatype: DOUBLE
def_value: 0.0
permission: READ

[Status Heater / Serial Number Heater]
datatype: STRING
def_value: ?
permission: READ

[Status Heater / Serial Number Insert]
datatype: STRING
def_value: ?
permission: READ

[Status Heater / Settled]
datatype: BOOLEAN
def_value: False
permission: READ

[Status Insert / Insert Connected]
datatype: COMBO
def_value: disconnected
combo_def_1: disconnected
combo_def_2: connected
permission: READ

[Temperature HeaterBox / Temperature_C]
datatype: DOUBLE
unit: C
def_value: -1000.0
permission: READ

[Temperature Resistance / Carbon_Ohm (expert)]
datatype: DOUBLE
unit: Ohm
def_value: 0.0
permission: READ

[Temperature Resistance / PT1000_Ohm (expert)]
datatype: DOUBLE
unit: Ohm
def_value: 0.0
permission: READ

[Temperature Temperature / Carbon_K (expert)]
datatype: DOUBLE
unit: K
def_value: -1.0
permission: READ

[Temperature Temperature / PT1000_K (expert)]
datatype: DOUBLE
unit: K
def_value: -1.0
permission: READ

[Temperature Temperature / Temperature_K]
datatype: DOUBLE
unit: K
def_value: -1.0
permission: READ

